PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = AliceBlue
  expName = internal_state_ratings
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Routines
  Routine internal_state
    SliderComponent IS_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      saveStartStop = False
      size = (1000, 30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    TextComponent ISlabel1
      color = MidnightBlue
      letterHeight = 25
      pos = (-500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelL
      wrapWidth = 400
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    TextComponent ISlabel2
      color = MidnightBlue
      letterHeight = 25
      pos = (500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelR
      wrapWidth = 400
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    TextComponent IS_text
      color = MidnightBlue
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
      wrapWidth = 1200
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    CodeComponent IS_code
      Code Type = Py
      Begin Experiment:
        ##start trial counter
        trialno = 0
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        ##marker display options
        IS_slider.marker.size=(.1,2)
        IS_slider.marker.color='Red'

        ##set initial mouse and marker positions
        mouse.setPos((-500,0))
        IS_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[0]
        IS_slider.markerPos=500 + (x)

        #this is super lazy, it only works because the script runs line by line
        #so if each condition is not filled it passes to the next (easier to
        #fulfill) one
        if mouse.getPressed()[0]:
            if trialno > 9:
                IS_post.addData('ISval_post', (IS_slider.markerPos / 10))
                continueRoutine = False
            elif trialno > 4:
                IS_drink.addData('ISval_drink', (IS_slider.markerPos / 10))
                continueRoutine = False
            elif trialno <= 4:
                IS_pre.addData('ISval_pre', (IS_slider.markerPos / 10))
                continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        trialno += 1
        print(trialno)
        core.wait(0.5)
  Routine end
    TextComponent done
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the ratings :)
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Flow
  LoopInitiator IS_pre loopType="TrialHandler"
    conditionsFile = internal_states.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'How hungry are you right now?'), ('LabelL', 'Not hungry at all'), ('LabelR', 'More hungry than anything'), ('Quality', 'Hungry')]),
      OrderedDict([('Question', 'How full are you right now?'), ('LabelL', 'Not full at all'), ('LabelR', 'More full than anything'), ('Quality', 'Full')]),
      OrderedDict([('Question', 'How thirsty are you right now?'), ('LabelL', 'Not thirsty at all'), ('LabelR', 'More thirsty than anything'), ('Quality', 'Thirsty')]),
      OrderedDict([('Question', 'How anxious are you right now?'), ('LabelL', 'Not anxious at all'), ('LabelR', 'More anxious than anything'), ('Quality', 'Anxious')]),
      OrderedDict([('Question', 'How badly do you need to pee right now?'), ('LabelL', 'Not at all'), ('LabelR', 'More than anything'), ('Quality', 'Pee')])]
    Routine internal_state
  LoopTerminator IS_pre
  Routine end
